//Registration parameter file
//Affine Transformation - Channel alignment 
//June 2019


// *************** ImageTypes ***************
(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)

// *************** Main components *************** 
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")
(ErodeMask "true" )

// *************** Multiresolution *************** 
(NumberOfResolutions 1)
(ImagePyramidSchedule 1 1)

// *************** Transformation *************** 
(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "true")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")

// *************** Optimizer *************** 
//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 400 )

// *************** Similarity measure *************** 
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

// *************** Image sampling ***************
//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 3)
(UseRandomSampleRegion "true")
(SampleRegionSize 100 100)
(NumberOfSpatialSamples 10000 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 10)

// *************** Interpolation and resampling *************** 
//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 3)
//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)
//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)


//  *************** Saving  *************** 
// The pixel type and format of the resulting deformed moving image
(ResultImagePixelType "float")
(ResultImageFormat "nii.gz")
